---
API: 2.1
OpenSesame: 3.3.6
Platform: nt
---
set width 1680
set uniform_coordinates yes
set title "HRI Dance Experiment"
set subject_parity even
set subject_nr 0
set start experimentSequence
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1050
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/lizzy/PycharmProjects/HRI-Dance-Project/Experiment"
set disable_garbage_collection yes
set description "The main experiment "
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad blockInstructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Presents instructions on block order"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this experiment, you will instruct a simulated robot about the dance moves it should perform.<br />This experiment consists of two blocks and a questionnaire.<br />Each of the blocks contains three practice trials and six experimental trials.<br />During the practice trials, you can get familiar with the experiment.<br />No information from the practice trials is registered.<br />After the practice trials, the experiment starts.<br />There, the task is the same as in the practice trials, but some data will be recorded.<br />Video and sound data are never stored.<br />More information about the goal of the experiment and about privacy can be found in the information letter.<br />You can always call for the experimenter if you have any questions.<br /><br /><small><i>Press any key to continue</i></small>" x=0 y=0 z_index=0

define loop blockLoop
	set source table
	set repeat 6
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run trialSequence

define sequence blockSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_loop always

define inline_script cleanUp
	set description "Executes Python code"
	set _run "recognizer.shutDownEngine()"
	set _prepare ""

define sequence experimentSequence
	set flush_keyboard yes
	set description "Runs the entire experiment"
	run setUp "[debugMode] = off"
	run welcome "[debugMode] = off"
	run blockInstructions "[debugMode] = off"
	run interfaceLoop_even "[subject_parity] = even or [forceGestureMode] = on"
	run interfaceLoop_odd "[subject_parity] = odd and [forceGestureMode] = off"
	run questionnaireInstructions "[debugMode] = off"
	run thankYou always

define sketchpad finishedBlockNotice
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Notices participant the experimental phase has ended"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Well done! You can take a break now. You can continue whenever you are ready.<br /><br /><small><i>Press any key to continue</i></small>" x=0 y=0 z_index=0

define sketchpad finishedPracticeGestural
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now the experimental trials start. They are the same as the practice trials.<br />So, perform the gestures in the given order, to make the robot dance. The order is indicated with numbers: 1, 2, 3, 4.<br /><br /><small><i>Press spacebar to start the 6 experimental trials.</i></small>" x=0 y=0 z_index=0

define sketchpad finishedPracticeVocal
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Notices participant the practice phase has ended"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now the experimental trials start. They are the same as the practice trials.<br />So, say the commands in the correct order, to make the robot dance. The order is indicated with numbers: 1, 2, 3, 4.<br /><br /><small><i>Press spacebar to start the 6 experimental trials.</i></small>" x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop interfaceLoop_even
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Runs the interface loop for half the participants"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 interface gestural
	setcycle 1 interface vocal
	run interfaceSequence

define loop interfaceLoop_odd
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Runs the interface loop for the other half of the participants"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 interface vocal
	setcycle 1 interface gestural
	run interfaceSequence

define sequence interfaceSequence
	set flush_keyboard yes
	set description "Runs the interface sequence"
	run setUpInterface always
	run practiceInstructionsVocal "[interface] = vocal and [debugMode] = off"
	run practiceInstructionsGestural "[interface] = gestural and [debugMode] = off"
	run practiceLoop "[debugMode] = off "
	run finishedPracticeVocal "[interface] = vocal and [debugMode] = off"
	run finishedPracticeGestural "[interface] = gestural and [debugMode] = off"
	run blockLoop always
	run cleanUp always
	run finishedBlockNotice always

define logger logTrial
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition never

define loop practiceAndBlock
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 1 practice no
	run blockSequence

define sketchpad practiceInstructionsGestural
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Presents instructions on gestural interface"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this block, you will instruct the robot about dance moves via gestural commands. There are six gestures. Every gesture stands for one dance move. You can see the gestures here (yellow = left hand; blue = right hand):<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />When you do not perform a command, sit in the neutral pose. This means to sit up straight with your hands on your lap.<br />In every trial, the goal is to make the robot perform four dance moves. Four out of six dance moves will have a number under them. You should start with number 1 and end with number 4. So, the order of moves is: 1, 2, 3, 4. If you give the wrong command, a red cross appears while the robot will perform the move, and you have to attempt the correct command again.<br />You can give a command when an icon of an eye is on the right side of the screen.<br />When there is no eye, your movements are not registered.<br />First there are three test trials. These trials are not recorded.<br /><br />In summary: execute the gestures in the correct order, to make the robot dance.<br />The order is indicated with numbers: 1, 2, 3, 4.<br /><br /><small><i>Press spacebar to start the 3 practice trials.</i></small><br />" x=0 y=0 z_index=0
	draw image center=1 file="raise_the_roof.png" scale=1 show_if=always x=640 y=-160 z_index=0
	draw image center=1 file="air_guitar.png" scale=1 show_if=always x=-640 y=-160 z_index=0
	draw image center=1 file="clap_your_hands.png" scale=1 show_if=always x=-384 y=-160 z_index=0
	draw image center=1 file="do_the_disco.png" scale=1 show_if=always x=-128 y=-160 z_index=0
	draw image center=1 file="give_a_box.png" scale=1 show_if=always x=128 y=-160 z_index=0
	draw image center=1 file="hands_on_hips.png" scale=1 show_if=always x=384 y=-160 z_index=0

define sketchpad practiceInstructionsVocal
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Presents instructions on vocal interface"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this block, you will instruct the robot about dance moves via vocal commands. There are six speech commands. Every command stands for one dance move. The commands are:<br /><br />Air guitar<br />Clap your hands<br />Do the disco<br />Give a box<br />Hands on hips<br />Raise the roof<br /><br />In every trial, the goal is to make the robot perform four dance moves. Four out of six dance moves will have a number under them. You should start with number 1 and end with number 4. So, the order of moves is: 1, 2, 3, 4. If you give the wrong command, a red cross appears while the robot will perform the move, and you have to attempt the correct command again.<br />You can say a command when an icon of an ear is on the right side of the screen. When there is no ear, your voice is not listened to and any vocal commands you give will not be registered. Try to speak clearly.<br />First there are three test trials. These trials are not recorded.<br /><br />In summary: say the commands in the correct order, to make the robot dance.<br />The order is indicated with numbers: 1, 2, 3, 4.<br /><br /><small><i>Press spacebar to start the 3 practice trials.</i></small><br /><br />" x=0 y=0 z_index=0

define loop practiceLoop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Runs the practice loop three times with predefined orders"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 fixedOrder "0,1,2,3"
	setcycle 0 practice yes
	setcycle 1 fixedOrder "4,5,2,3"
	setcycle 1 practice yes
	setcycle 2 fixedOrder "0,1,4,5"
	setcycle 2 practice yes
	run trialSequence

define inline_script prepareTrialCondition_1
	set description "Executes Python code"
	___run__
	print("Starting trial")
	#clock.sleep(1000)
	
	
	keywordIndex = voiceRecognizer.listen(timeout = 10000)
	
	if keywordIndex is not None and keywordIndex in var.order:
	    transformedIndex = var.order.index(keywordIndex)
	    print(f"Detected {var.keywordOrder[transformedIndex]}")
	    trialCanvas[f"keywordText{transformedIndex}"].color = 'green'
	    trialCanvas.show()
	else:
	    print("No keyword detected, moving on")
	
	print("Ending trial")
	clock.sleep(2000)
	__end__
	___prepare__
	# Create keywords order
	fullRange = list(range(len(var.keywords)))
	random.shuffle(fullRange)
	var.order = fullRange[:var.usedKeywordAmount]
	var.keywordOrder = [var.keywords[i] for i in var.order]
	
	# Create canvas
	yTop = -80
	yStep = 30
	__end__

define sketchpad presentOrder
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=blueberry x=-384 y=288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=alexa x=-236 y=289 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=google x=87 y=286 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=terminator x=254 y=289 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=cake x=-96 y=288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=hello x=416 y=288 z_index=0
	draw rect color=black fill=0 h=448 penwidth=1 show_if=always w=672 x=0 y=0 z_index=0

define sketchpad questionnaireInstructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Presents instructions on questionnaire"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="This was the practical part of the experiment.<br />The last part is a questionnaire about your experience.<br />Click here to fill it in.<br /><br /><small><i>Press any key to continue</i></small>" x=0 y=0 z_index=0

define inline_script runTrial
	set description "Executes Python code"
	___run__
	print("Starting trial")
	    
	assert recognizer is not None, "No valid recognizer set"
	trialManager.run(recognizer = recognizer, timeoutPerCommand = var.timeoutPerCommand)
	
	print("Ended trial")
	__end__
	___prepare__
	# Create keywords order
	if var.practice == 'no':
	    fullRange = list(range(len(var.keywords)))
	    random.shuffle(fullRange)
	    var.order = fullRange[:var.usedKeywordAmount]
	    var.timeoutPerCommand = 6
	else:
	    var.order = [int(i) for i in var.fixedOrder.split(",")]
	    var.timeoutPerCommand = 15
	
	if var.debugMode == 'on':
	    var.timeoutPerCommand = 15
	    print(f"DEBUG: Increase command-timeout to {var.timeoutPerCommand}")
	    
	print("Preparing trial with order", var.order)
	trialManager = TrialManager(var.order, var.keywords, _UIManager, logger)
	trialManager.prepare(waitingSymbol)
	__end__

define inline_script setUp
	set description "Sets up Python environment"
	set _run ""
	___prepare__
	import sys
	import random
	import inspect
	import sklearn
	
	# Debug settings
	var.debugMode = 'off'
	var.forceGestureMode = 'off'
	var.forceDemoMode = 'on'
	
	# Include code location
	poolFolders = pool.folders()
	assert len(poolFolders) == 2, "Missing pool folder in experiment folder!"
	baseFolder = poolFolders[1]
	sys.path.append(f'{baseFolder}/code')
	
	# Apply Windows fix
	isWindows = sys.platform.startswith('win')
	if isWindows:
	    sys.path.append(f'{baseFolder}/libraries')
	    
	# Import custom classes
	if var.forceDemoMode == 'on':
	    from DemoRecognition import DemoRecognizer
	else:
	    from VoiceRecognition import VoiceRecognizer
	    from GestureRecognition import GestureRecognizer
	    
	from TrialManaging import UIManager, ExperimentLogger, TrialManager
	
	# Define keywords
	var.keywords = ["air guitar", "clap your hands", "do the disco", "give a box", "hands on hips", "raise the roof"]
	var.usedKeywordAmount = 4
	
	# Start voice recognizer
	pathSuffix = ("_windows" if isWindows else "_linux") + ".ppn"
	snakeKeywords = (keyword.replace(' ', '_') for keyword in var.keywords)
	keywordPaths = list((f"{baseFolder}/data/vocal/{snakeKeyword}{pathSuffix}" for snakeKeyword in snakeKeywords))
	if var.forceDemoMode == 'off':
	    voiceRecognizer = VoiceRecognizer()
	else:
	    voiceRecognizer = DemoRecognizer(var.keywords)
	# Start gesture recognizer
	gestureBasePath = f"{baseFolder}/data/gestural/SVM_final"
	suffix = f"_v{sklearn.__version__.split('.')[1]}.joblib"
	gesturePath = gestureBasePath+suffix
	if var.forceDemoMode == 'off':
	    gestureRecognizer = GestureRecognizer(flip_image = not isWindows)
	else:
	    gestureRecognizer = DemoRecognizer(var.keywords)
	
	# Prepare logger
	logger = ExperimentLogger(var)
	
	# Prepare UI manager
	_UIManager = UIManager(var.keywords, self.experiment.window)
	_UIManager.loadResources(baseFolder)
	
	# Debug
	print("Set up complete")
	if var.debugMode == 'on':
	    print("DEBUG: Running in debug mode, skipping instructions")
	if var.forceGestureMode == 'on':
	    print("DEBUG: Skipping to gestural interface")
	__end__

define inline_script setUpInterface
	set description "Executes Python code"
	set _run ""
	___prepare__
	recognizer = None
	listeningSymbol = "?"
	
	if var.interface == 'vocal':
	    if var.forceDemoMode == 'off':
	        voiceRecognizer.startEngine(keywordPaths = keywordPaths)
	    recognizer = voiceRecognizer
	    waitingSymbol = "ear"
	elif var.interface == 'gestural':
	    if var.forceDemoMode == 'off':
	        gestureRecognizer.startEngine(gesturePath, keywords = var.keywords)
	    recognizer = gestureRecognizer
	    waitingSymbol = "eye"
	else:
	    raise NotImplementedError
	    
	print(f"Started {var.interface} recognizer")
	__end__

define sketchpad thankYou
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Thanks the participant for participating"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="The experiment has ended.<br />Thank you for your participation!<br /><br /><small><i>Please alert the experiment supervisor</i></small>" x=0 y=0 z_index=0

define sequence trialSequence
	set flush_keyboard yes
	set description "Runs a single strial"
	run runTrial always
	run logTrial always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Welcomes participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Welcome to the Human-Robot Interaction experiment!<br /><br /><small><i>Press any key to continue</i></small>" x=0 y=0 z_index=0

